"""
aeif_cond_exp - Conductance based exponential integrate-and-fire neuron model
#############################################################################

Description
+++++++++++

aeif_cond_exp is the adaptive exponential integrate and fire neuron
according to Brette and Gerstner (2005), with post-synaptic
conductances in the form of truncated exponentials.

The membrane potential is given by the following differential equation:

.. math::

   C_m \frac{dV_m}{dt} =
   -g_L(V_m-E_L)+g_L\Delta_T\exp\left(\frac{V_m-V_{th}}{\Delta_T}\right) - g_e(t)(V_m-E_e) \\
                                                     -g_i(t)(V_m-E_i)-w +I_e

and

.. math::

   \tau_w \frac{dw}{dt} = a(V_m-E_L) - w

Note that the membrane potential can diverge to positive infinity due to the exponential term. To avoid numerical instabilities, instead of :math:`V_m`, the value :math:`\min(V_m,V_{peak})` is used in the dynamical equations.


References
++++++++++

.. [1] Brette R and Gerstner W (2005). Adaptive exponential
       integrate-and-fire model as an effective description of neuronal
       activity. Journal of Neurophysiology. 943637-3642
       DOI: https://doi.org/10.1152/jn.00686.2005


See also
++++++++

iaf_cond_exp, aeif_cond_alpha
"""
model aeif_cond_exp_neuron:

    state:
        V_m mV = E_L   # Membrane potential
        w pA = 0 pA    # Spike-adaptation current
        refr_t ms = 0 ms    # Refractory period timer
        is_refractory boolean = false
        # external input conductance

    equations:
        inline V_bounded mV = min(V_m, V_peak)    # prevent exponential divergence
        kernel g_inh = exp(-t / tau_syn_inh)
        kernel g_exc = exp(-t / tau_syn_exc)

        # Add inlines to simplify the equation definition of V_m
        inline exp_arg real = (V_bounded - V_th) / Delta_T
        inline I_spike pA = g_L * Delta_T * exp(exp_arg)
        inline I_syn_exc pA = convolve(g_exc, exc_spikes) * nS * (V_bounded - E_exc)
        inline I_syn_inh pA = convolve(g_inh, inh_spikes) * nS * (V_bounded - E_inh)

        V_m' = (-g_ext * V_bounded - g_L * (V_bounded - E_L) + I_spike - I_syn_exc - I_syn_inh - w + I_e) / C_m
        w' = (a * (V_bounded - E_L) - w) / tau_w

    parameters:
        # membrane parameters
        C_m pF = 80 pF # Membrane Capacitance
        refr_T ms = 7 ms # Duration of refractory period
        V_reset mV = -60 mV # Reset Potential
        g_L nS = 0.8 nS # Leak Conductance
        E_L mV = -80 mV # Leak reversal Potential (aka resting potential)

        # spike adaptation parameters
        a nS = -0.8 nS # Subthreshold adaptation
        b pA = 100 pA # Spike-triggered adaptation
        Delta_T mV = 0.8 mV # Slope factor
        tau_w ms = 1 ms # Adaptation time constant
        V_th mV = -56 mV # Threshold Potential
        V_peak mV = -40 mV # Spike detection threshold

        # synaptic parameters
        E_exc mV = 0 mV            # Excitatory reversal Potential
        tau_syn_exc ms = 1.5 ms    # Synaptic Time Constant Excitatory Synapse
        E_inh mV = -80.0 mV        # Inhibitory reversal Potential
        tau_syn_inh ms = 4.2 ms    # Synaptic Time Constant for Inhibitory Synapse

        # constant external input current
        I_e pA = 0 pA

    input:
        inh_spikes <- inhibitory spike
        exc_spikes <- excitatory spike
        g_ext nS <- continuous

    output:
        spike

    update:
        if is_refractory:
            # neuron is absolute refractory, do not evolve V_m
            refr_t -= resolution()
            integrate_odes(w)
        else:
            # neuron not refractory, so evolve all ODEs
            integrate_odes(w, V_m)

    onCondition(V_m >= V_peak):
        # threshold crossing
        refr_t = refr_T    # start of the refractory period
        is_refractory = true
        V_m = V_reset # clamp potential
        w += b
        emit_spike()

    onCondition(is_refractory and refr_t <= resolution() / 2):
        # end of refractory period
        refr_t = 0 ms
        is_refractory = false
